# Instrument driver configuration file.

[General settings]
# The name is shown in all the configuration windows
name: AMI430 Vector

# The version string should be updated whenever changes are made to this config file

version: 0.0.9

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: AMI430_vector_driver

signal_generator: True

interface: Other

[Model and options]
# The option section allow instruments with different options to use the same driver

# List of models supported by this driver
model_str_1: Hardware
model_str_2: Simulation

# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa: False

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
[Control / Logging]
datatype: COMBO
def_value: WARNING
combo_def_1: DEBUG
combo_def_2: INFO
combo_def_3: WARNING

; [Control / Ramp Mode]
; datatype: COMBO
; def_value: simultaneous
; combo_def_1: default
; combo_def_2: simultaneous

[Control / Ramp Rate]
datatype: DOUBLE
unit: T / s
def_value: 0.0
low_lim: 0.0
high_lim: 10.0

[Control / Field target]
datatype: VECTOR
unit: T
def_value: 0.0
x_name: Magnetic field
x_unit: T

[Status / Field actual]
datatype: DOUBLE
unit: T
def_value: 0.0
; permission: READ

[Status / Coil constant]
datatype: DOUBLE
unit: T/A
def_value: 0.0
permission: READ

[Status / Ramping state]
datatype: COMBO
def_value: holding
combo_def_1: ramping
combo_def_2: holding
combo_def_3: paused
combo_def_4: manual up
combo_def_5: manual down
combo_def_6: zeroing current
combo_def_7: quench detected
combo_def_8: at zero current
combo_def_9: heating switch
combo_def_10: cooling switch
permission: READ

[Status / ERROR]
datatype: STRING
def_value: ?
permission: READ
